PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus size': '8.5', 'spatial freq': '0.8', 'start contrast': '1', 'step contrast': '-0.2', 'end contrast': '0.2', 'stimulus duration': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    VariableComponent pos_list
      disabled = True
      startExpValue = {'right':(16,0), 'left':(-16,0)}
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    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16,0)
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    GratingComponent GA
      contrast [set every repeat] = contrast
      pos [set every repeat] = position
      saveStartStop = False
      sf = float(expInfo['spatial freq'])
      size = [32,64]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture
      pos [set every repeat] = position
      shape = circle
      size = 128
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation
    TextComponent placeholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        contrast sensitivity task

        Use to arrow keys to point to the direction of the grating
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (position==(-16,0)):
            b='left'
        else:
            b='right'
  Routine set_values
    VariableComponent spatial_freq
      disabled = True
      startExpValue = float(expInfo['start spatial freq'])-float(expInfo['step spatial freq'])
      startRoutineValue = spatial_freq+float(expInfo['step spatial freq'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    VariableComponent contrast
      startExpValue = float(expInfo['start contrast'])-float(expInfo['step contrast'])
      startRoutineValue = contrast+float(expInfo['step contrast'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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  Routine Start
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press spacebar to start the experiment

        Use the arrow keys to point to the direction of the stimuli
Flow
  Routine Start
  LoopInitiator GA_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (float(expInfo['end contrast'])-float(expInfo['start contrast']))//float(expInfo['step contrast'])
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    Routine set_values
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine grating_acuity
      Routine central_fixation
    LoopTerminator trials
  LoopTerminator GA_loop
