PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'start spatial freq': '0.2', 'start contrast': '0.02', 'stimulus duration': '1'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stimuli3
  keyboardBackend = ioHub
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Routines
  Routine start_opt
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press spacebar to start the experiment

        Use the 'u','i','j','k' keys to point to respective directions of the stimuli
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_values
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if opt==1:
           contrast= (45**(1/19))*contrast
           spatial=0.5
        elif opt==2:
           contrast= (45**(1/19))*contrast
           spatial=0.5
        elif opt==3:
            spatial= (45**(1/19))*spatial
            contrast= 0.5
        elif opt==4:
            spatial= (45**(1/19))*spatial
            contrast=0.5
    VariableComponent contrast
      startExpValue = float(expInfo['start contrast'])
      startRoutineValue = contrast
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    VariableComponent spatial
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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  Routine grating_acuity
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        #if opt==1 or opt==3:
        #    pos=(randchoice([-1, 1])*16,0)
        #else:
        #    pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
      Begin Routine:
        if opt==1 or opt==3:
            pos=(randchoice([-1, 1])*16,0)
        else:
            pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = pos
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    GratingComponent GA
      contrast [set every repeat] = contrast
      mask = circle
      pos [set every repeat] = position
      saveStartStop = False
      sf [set every repeat] = spatial
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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      text [set every repeat]:
        $"Spatial frequency: " +  f'{spatial:.3f}'+"\n"+"Contrast: "+ f'{contrast:.3f}'
  Routine central_fixation
    KeyboardComponent key_resp_2
      allowedKeys = 'u','i','j','k'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (opt==1 or opt==3) and (position==(-16,0)):
            b='j'
        elif (opt==1 or opt==3) and (position==(16,0)):
            b='k'
        elif (opt==2 or opt==4) and (position==(-16,-8) ):
            b='j'
        elif (opt==2 or opt==4) and (position==(-16,8) ):
            b='u'
        elif (opt==2 or opt==4) and (position==(16,-8) ):
            b='k'
        elif (opt==2 or opt==4) and (position==(16,8) ):
            b='i'
    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"Spatial frequency: " +  f'{spatial:.3f}'+"\n"+"Contrast: "+ f'{contrast:.3f}'
  Routine start_exp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to visual stimuli.
        Contrast Sensitivity Experiments:
        Press 1 for stimulus in two hemiscreens.
        Press 2 for stimulus in four quadrants.
        Spatial Frequency Sensitivity Experiments:
        Press 3 for stimulus in two hemiscreens.
        Press 4 for stimulus in four quadrants.
    KeyboardComponent option_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if option_resp.keys== '1':
           opt=1
        #   start_contrast=float(expInfo['start contrast'])
        #   start_spatial=0.5
        elif option_resp.keys== '2':
           opt=2
        #   start_contrast=float(expInfo['start contrast'])
        #   start_spatial=0.5
        elif option_resp.keys== '3':
            opt=3
        #    start_spatial=float(expInfo['start spatial freq'])
        #    start_contrast=1
        elif option_resp.keys== '4':
            opt=4
        #    start_spatial=float(expInfo['start spatial freq'])
        #    start_contrast=1
  Routine delay
    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine start_exp
  Routine start_opt
  LoopInitiator ga_loop loopType="TrialHandler"
    loopType = random
    nReps = 19
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    Routine set_values
    LoopInitiator psychometric_func loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine grating_acuity
      Routine central_fixation
      Routine delay
    LoopTerminator psychometric_func
  LoopTerminator ga_loop
