PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus duration': '1', 'start spatial freq': '0.5', 'start contrast': '0.5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stimuli4
  keyboardBackend = ioHub
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Routines
  Routine central_fixation
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (opt==1 or opt==3) and (position==(-16,0)):
            b='j'
        elif (opt==1 or opt==3) and (position==(16,0)):
            b='k'
        elif (opt==2 or opt==4) and (position==(-16,-8) ):
            b='j'
        elif (opt==2 or opt==4) and (position==(-16,8) ):
            b='u'
        elif (opt==2 or opt==4) and (position==(16,-8) ):
            b='k'
        elif (opt==2 or opt==4) and (position==(16,8) ):
            b='i'
    KeyboardComponent key_resp_2
      allowedKeys = 'u','i','j','k'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"Spatial frequency: " +  str(float(expInfo["start spatial freq"]))+"\n"+"Contrast: "+ f'{level:.3f}'
  Routine delay
    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine grating_acuity
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        #if opt==1 or opt==3:
        #    pos=(randchoice([-1, 1])*16,0)
        #else:
        #    pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
      Begin Routine:
        if opt==1 :
            pos=(randchoice([-1, 1])*16,0)
        else:
            pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = pos
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    GratingComponent GA
      contrast [set every repeat] = level
      mask = circle
      pos [set every repeat] = position
      saveStartStop = False
      sf = float(expInfo["start spatial freq"])
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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      text [set every repeat]:
        $"Spatial frequency: " +  str(float(expInfo["start spatial freq"]))+"\n"+"Contrast: "+ f'{level:.3f}'
  Routine set_values
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if opt==1:
           contrast= (45**(1/19))*contrast
           spatial=0.5
        elif opt==2:
           contrast= (45**(1/19))*contrast
           spatial=0.5
        elif opt==3:
            spatial= (45**(1/19))*spatial
            contrast= 0.5
        elif opt==4:
            spatial= (45**(1/19))*spatial
            contrast=0.5
    VariableComponent contrast
      startExpValue = float(expInfo['start contrast'])
      startRoutineValue = level
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    VariableComponent spatial
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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  Routine start_exp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to visual stimuli.
        Contrast Sensitivity Experiments:
        Press 1 for stimulus in two hemiscreens.
        Press 2 for stimulus in four quadrants.
        Spatial Frequency Sensitivity Experiments:
        Press 3 for stimulus in two hemiscreens.
        Press 4 for stimulus in four quadrants.
    KeyboardComponent option_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if option_resp.keys== '1':
           opt=1
           opt1=1
           opt2=0
        #   start_contrast=float(expInfo['start contrast'])
        #   start_spatial=0.5
        elif option_resp.keys== '2':
           opt=2
           opt1=1
           opt2=0
        #   start_contrast=float(expInfo['start contrast'])
        #   start_spatial=0.5
        elif option_resp.keys== '3':
            opt=3
            opt1=0
            opt2=1
        #    start_spatial=float(expInfo['start spatial freq'])
        #    start_contrast=1
        elif option_resp.keys== '4':
            opt=4
            opt1=0
            opt2=1
        #    start_spatial=float(expInfo['start spatial freq'])
        #    start_contrast=1
  Routine start_opt
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press spacebar to start the experiment

        Use the 'u','i','j','k' keys to point to respective directions of the stimuli
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grating_acuity_2
    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        #if opt==1 or opt==3:
        #    pos=(randchoice([-1, 1])*16,0)
        #else:
        #    pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
      Begin Routine:
        if  opt==3:
            pos=(randchoice([-1, 1])*16,0)
        elif opt==4:
            pos= (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
    VariableComponent position_2
      startExpValue = (0, 0)
      startRoutineValue = pos
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    GratingComponent GA_2
      contrast [set every repeat] = float(expInfo["start contrast"])
      mask = circle
      pos [set every repeat] = position_2
      saveStartStop = False
      sf [set every repeat] = level
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    PolygonComponent polygon_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
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      text [set every repeat]:
        $"Spatial frequency: " + f'{level:.3f}' +"\n"+"Contrast: "+str(float(expInfo["start contrast"]))
  Routine central_fixation_2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if (opt==3) and (position_2==(-16,0)):
            b='j'
        elif (opt==3) and (position_2==(16,0)):
            b='k'
        elif (opt==4) and (position_2==(-16,-8) ):
            b='j'
        elif ( opt==4) and (position_2==(-16,8) ):
            b='u'
        elif ( opt==4) and (position_2==(16,-8) ):
            b='k'
        elif (opt==4) and (position_2==(16,8) ):
            b='i'
    KeyboardComponent key_resp_3
      allowedKeys = 'u','i','j','k'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent polygon_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0,0.125)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"Spatial frequency: " + f'{level:.3f}' +"\n"+"Contrast: "+str(float(expInfo["start contrast"]))
  Routine delay_2
    PolygonComponent polygon_6
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine start_exp
  Routine start_opt
  LoopInitiator opt1 loopType="TrialHandler"
    loopType = random
    nReps = opt1
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    LoopInitiator staircase_loop loopType="StairHandler"
      N down = 1
      N reversals = 0
      N up = 2
      loopType = staircase
      max value = 1
      min value = 0.02
      nReps = 20
      start value = 0.5
      step sizes = [0.05]
      step type = lin
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      Routine grating_acuity
      Routine central_fixation
      Routine delay
    LoopTerminator staircase_loop
  LoopTerminator opt1
  LoopInitiator opt2 loopType="TrialHandler"
    loopType = random
    nReps = opt2
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    LoopInitiator staircase_loop2 loopType="StairHandler"
      N down = 2
      N reversals = 0
      N up = 1
      loopType = staircase
      max value = 10
      min value = 0.2
      nReps = 20
      start value = 5
      step sizes = [.5]
      step type = lin
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      Routine grating_acuity_2
      Routine central_fixation_2
      Routine delay_2
    LoopTerminator staircase_loop2
  LoopTerminator opt2
