PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'spatial freq': '0.8', 'stimulus duration': '1', 'start contrast': '0.02', 'start spatial freq': '0.2', 'contrast': '1'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stimuli_1
  keyboardBackend = PsychToolbox
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Routines
  Routine start_exp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to visual stimuli.
        Contrast Sensitivity Experiments:
        Press 1 for stimulus in two hemiscreens.
        Press 2 for stimulus in four quadrants.
        Spatial Frequency Sensitivity Experiments:
        Press 3 for stimulus in two hemiscreens.
        Press 4 for stimulus in four quadrants.
    KeyboardComponent option_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if option_resp.keys== '1':
            opt1=1
            opt2=0
            opt3=0
            opt4=0
        elif option_resp.keys== '2':
            opt2=1
            opt1=0
            opt3=0
            opt4=0
        elif option_resp.keys== '3':
            opt3=1
            opt1=0
            opt2=0
            opt4=0
        elif option_resp.keys== '2':
            opt4=1
            opt1=0
            opt3=0
            opt2=0
  Routine start_opt1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press spacebar to start the experiment

        Use the arrow keys to point to the direction of the stimuli
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grating_acuity1
    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16,0)
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    GratingComponent GA
      contrast [set every repeat] = contrast
      pos [set every repeat] = position
      saveStartStop = False
      sf = float(expInfo['spatial freq'])
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture
      pos [set every repeat] = position
      shape = circle
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation1
    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (position==(-16,0)):
            b='left'
        else:
            b='right'
  Routine set_values1
    VariableComponent contrast
      startExpValue = float(expInfo['start contrast'])
      startRoutineValue = contrast
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        contrast= (45**(1/19))*contrast
  Routine set_values2
    VariableComponent contrast_2
      startExpValue = float(expInfo['start contrast'])
      startRoutineValue = contrast_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        contrast_2 = (45**(1/19))*contrast_2
  Routine grating_acuity2
    VariableComponent position_2
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
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    GratingComponent GA_2
      contrast [set every repeat] = contrast_2
      pos [set every repeat] = position_2
      saveStartStop = False
      sf = float(expInfo['spatial freq'])
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture_2
      pos [set every repeat] = position_2
      shape = circle
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation2
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if position==(-16,8) or position==(-16,-8):
            b='left'
        else:
            b='right'
  Routine set_values3
    VariableComponent spatial
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        spatial= (45**(1/19))*spatial
  Routine grating_acuity3
    VariableComponent position_3
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16,0)
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    GratingComponent GA_3
      contrast = float(expInfo['contrast'])
      pos [set every repeat] = position_3
      saveStartStop = False
      sf [set every repeat] = spatial
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture_3
      pos [set every repeat] = position_3
      shape = circle
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation3
    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if (position==(-16,0)):
            b='left'
        else:
            b='right'
  Routine set_values4
    VariableComponent spatial_2
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        spatial_2 = (45**(1/19))*spatial_2
  Routine grating_acuity4
    VariableComponent position_4
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16,randchoice([-1, 1])*8)
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    GratingComponent GA_4
      contrast = float(expInfo['contrast'])
      pos [set every repeat] = position_4
      saveStartStop = False
      sf [set every repeat] = spatial_2
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture_4
      pos [set every repeat] = position_4
      shape = circle
      size = 8.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation4
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      correctAns = $b
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if position==(-16,8) or position==(-16,-8):
            b='left'
        else:
            b='right'
Flow
  Routine start_exp
  Routine start_opt1
  LoopInitiator opt1 loopType="TrialHandler"
    loopType = random
    nReps = opt1
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    LoopInitiator ga_loop loopType="TrialHandler"
      loopType = random
      nReps = 19
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      Routine set_values1
      LoopInitiator psycohmetric_loop1 loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine grating_acuity1
        Routine central_fixation1
      LoopTerminator psycohmetric_loop1
    LoopTerminator ga_loop
  LoopTerminator opt1
  LoopInitiator opt2 loopType="TrialHandler"
    loopType = random
    nReps = opt2
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    LoopInitiator ga_loop2 loopType="TrialHandler"
      loopType = random
      nReps = 19
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      Routine set_values2
      LoopInitiator psychometric_loop2 loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine grating_acuity2
        Routine central_fixation2
      LoopTerminator psychometric_loop2
    LoopTerminator ga_loop2
  LoopTerminator opt2
  LoopInitiator opt3 loopType="TrialHandler"
    loopType = random
    nReps = opt3
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    LoopInitiator ga_loop3 loopType="TrialHandler"
      loopType = random
      nReps = 19
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      Routine set_values3
      LoopInitiator psychometric_loop3 loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine grating_acuity3
        Routine central_fixation3
      LoopTerminator psychometric_loop3
    LoopTerminator ga_loop3
  LoopTerminator opt3
  LoopInitiator opt4 loopType="TrialHandler"
    loopType = random
    nReps = opt4
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    LoopInitiator ga_loop4 loopType="TrialHandler"
      loopType = random
      nReps = 19
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      Routine set_values4
      LoopInitiator psychometric_loop4 loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine grating_acuity4
        Routine central_fixation4
      LoopTerminator psychometric_loop4
    LoopTerminator ga_loop4
  LoopTerminator opt4
